PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = untitled
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today " + "or " + "GBP " + str(future_reward) + " after " + str(delay) + " days " 
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    KeyboardComponent key_resp
      allowedKeys = 'l','t'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = delay discounting - conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 168, 'future_reward': 230, 'delay': 11},
      {'reward_today': 194, 'future_reward': 339, 'delay': 67},
      {'reward_today': 62, 'future_reward': 138, 'delay': 31},
      {'reward_today': 178, 'future_reward': 462, 'delay': 27},
      {'reward_today': 156, 'future_reward': 377, 'delay': 13},
      {'reward_today': 12, 'future_reward': 64, 'delay': 60},
      {'reward_today': 64, 'future_reward': 327, 'delay': 159},
      {'reward_today': 11, 'future_reward': 303, 'delay': 55},
      {'reward_today': 188, 'future_reward': 472, 'delay': 112},
      {'reward_today': 61, 'future_reward': 295, 'delay': 155},
      {'reward_today': 76, 'future_reward': 84, 'delay': 45},
      {'reward_today': 183, 'future_reward': 404, 'delay': 92},
      {'reward_today': 76, 'future_reward': 160, 'delay': 60},
      {'reward_today': 250, 'future_reward': 427, 'delay': 31},
      {'reward_today': 28, 'future_reward': 227, 'delay': 29},
      {'reward_today': 96, 'future_reward': 277, 'delay': 159},
      {'reward_today': 72, 'future_reward': 99, 'delay': 122},
      {'reward_today': 142, 'future_reward': 210, 'delay': 101},
      {'reward_today': 25, 'future_reward': 312, 'delay': 80},
      {'reward_today': 217, 'future_reward': 407, 'delay': 152}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
    Routine trial
  LoopTerminator trials
